PsychoPy2experiment version="2020.1.1"
Settings
  Audio lib = pyo
  Data filename = u'data' + os.sep + '%s_%s' % (expInfo['participant'], expInfo['date'])
  Experiment info = {'session': '01', 'participant': ''}
  Full-screen window = True
  Monitor = e330
  Save excel file = True
  Screen = 1
  Units = norm
  Window size (pixels) = [1920, 1080]
  color = black
  expName = stroop
  logging level = warning
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Routines
  Routine trial
    TextComponent fovealWord
      color [set every repeat] = $FovCol
      letterHeight = 0.2
      saveStartStop = False
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 2.0
      text [set every repeat] = $FovWord
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    TextComponent parafovealWord
      color [set every repeat] = $ParaCol
      letterHeight = 0.2
      pos [set every repeat] = $ParaPos
      saveStartStop = False
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 2.0
      text [set every repeat] = $ParaWord
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    KeyboardComponent voicekey
      allowedKeys [set every repeat] = '0'
      durationEstim = 2.0
      forceEndRoutine = False
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 2.0
      store = first key
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    MicrophoneComponent mic
      channel = 0
      saveStartStop = False
      startVal [time (s)] = 0.5
      stereo = False
      stopVal [duration (s)] = 2.0
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  Routine instruct
    TextComponent instrText
      color = $[1, 1, 1]
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0
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      text:
        OK. Ready for the real thing?

        Remember, ignore the word itself;
        just say the name of the colour of the ink

        (Esc will quit)

        Press the spacebar to continue
    KeyboardComponent spaceToStart
      allowedKeys = 'space'
      correctAns = thisTrial.corrAns
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0
      store = nothing
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  Routine thanks
    TextComponent thanksText
      color = $[1, 1, 1]
      font = arial
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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      text:
        This is the end of the experiment.

        Thanks!
  Routine isi
    StaticComponent ISI
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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Flow
  Routine instruct
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = trialTypes.csv
    endPoints = [1, 2]
    loopType = random
    nReps = 1
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    conditions:
      [{'text': 'red', 'congruent': 1, 'corrAns': 'left', 'letterColor': 'red'},
      {'text': 'red', 'congruent': 0, 'corrAns': 'down', 'letterColor': 'green'},
      {'text': 'green', 'congruent': 1, 'corrAns': 'down', 'letterColor': 'green'},
      {'text': 'green', 'congruent': 0, 'corrAns': 'right', 'letterColor': 'blue'},
      {'text': 'blue', 'congruent': 1, 'corrAns': 'right', 'letterColor': 'blue'},
      {'text': 'blue', 'congruent': 0, 'corrAns': 'left', 'letterColor': 'red'}]
    Routine trial
    Routine isi
  LoopTerminator trials
  Routine thanks
